<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:PupilInterface;assembly=PupilInterface"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Range">
          <rx:Start>0</rx:Start>
          <rx:Count>100</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="HeaderStream" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>ReadHeader</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="IntProperty">
                <Value>32</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Offset" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>C:\Users\neurogears\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\202304132023_04_13_09_26_52\PupilLabs\WorldCamera_Frame1.bin</dsp:Path>
                <dsp:Offset>3168</dsp:Offset>
                <dsp:SampleRate>0</dsp:SampleRate>
                <dsp:ChannelCount>1</dsp:ChannelCount>
                <dsp:BufferLength>32</dsp:BufferLength>
                <dsp:Depth>U8</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source2" />
            <Edge From="4" To="5" Label="Source3" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="dsp:ConvertToArray">
        <dsp:Depth xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ToVideoDataHeader" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" DisplayName="VideoStream" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ReadVideo</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.01S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>DataBytes</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferLength" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>VideoBytesRead</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Offset" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixReader">
                <dsp:Path>C:\Users\neurogears\NeuroGEARS Ltd\Emotional Cities - Documents\Experiment Control and Acquisition\Datasets\202304132023_04_13_09_26_52\PupilLabs\WorldCamera_Frame2.bin</dsp:Path>
                <dsp:Offset>1051896</dsp:Offset>
                <dsp:SampleRate>0</dsp:SampleRate>
                <dsp:ChannelCount>1</dsp:ChannelCount>
                <dsp:BufferLength>10642</dsp:BufferLength>
                <dsp:Depth>U8</dsp:Depth>
                <dsp:Layout>RowMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>VideoBytesRead</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="10" Label="Source2" />
            <Edge From="3" To="7" Label="Source3" />
            <Edge From="4" To="7" Label="Source4" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="dsp:ConvertToArray">
        <dsp:Depth xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:DecodeByteFrame" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>VideoBytesRead</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>VideoBytesRead</rx:Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>